#pragma rtGlobals=1

Macro Assign_Matching_Waves()

pAssign_Matching_Waves()
proc pAssign_Matching_Waves(str_input1,str_input2)
string str_input1
prompt str_input1 "source waves ?"
string str_input2
prompt str_input2 "target waves ?"
string/g str_list1 = sortlist(wavelist(str_input1,";",""),";",16)
print sortlist(wavelist(str_input1,"\r",""),"\r",16)
string/g str_list2 = sortlist(wavelist(str_input2,";",""),";",16)
print sortlist(wavelist(str_input2,"\r",""),"\r",16)
silent 1
pauseupdate
variable/g var_index = 0
do
	$stringfromlist(var_index,str_list2) = $stringfromlist(var_index,str_list1)
	var_index+=1
while(var_index<itemsinlist(str_list1))
resumeupdate
end