#pragma rtGlobals=1		// Use modern global access method.
#include <Waves Average>

macro Display_Matrix_Row_Serial()

pDisplay_Matrix_Row_Serial()
proc pDisplay_Matrix_Row_Serial(str_input,str_row)
string str_input
prompt str_input "input waves ?"
string str_row
prompt str_row "row index ?"
string str_list_input = wavelist(str_input,";","")
string str_list_sort = sortlist (str_list_input,";",16)
string str_list_print = wavelist(str_input,"\r","")
string str_list_sort_print = sortlist (str_list_print,"\r",16)
print str_list_sort_print
string/g str_graph_list = sortlist(winlist("*",";","WIN:1"),";",16)
string/g str_table_list = sortlist(winlist("*",";","WIN:2"),";",16)
variable/g var_graph_last = itemsinlist(str_graph_list)-1
string/g str_graph_last = winname(0,1)
variable/g var_table_last = itemsinlist(str_table_list)-1
string/g str_table_last = winname(0,2)
getwindow $str_graph_last, wsize
variable/g var_left_g = v_left + 5.25
variable/g var_top_g = v_top + 22.5
variable/g var_right_g = v_right + 5.25
variable/g var_bottom_g = v_bottom + 22.5
getwindow $str_table_last, wsize
variable/g var_left_t = v_left + 5.25
variable/g var_top_t = v_top + 22.5
variable/g var_right_t = v_right + 5.25
variable/g var_bottom_t = v_bottom + 22.5
variable/g var_row = str2num(str_row)
variable/g var_total = itemsinlist(str_list_input)
variable/g var_index = 0
string/g str_waves
display
do
silent 1
pauseupdate
	str_waves = stringfromlist(var_index,str_list_sort)
	appendtograph $str_waves[var_row][]
var_index += 1
while(var_index<var_total)
resumeupdate
modifygraph rgb=(0,0,0)
movewindow var_left_g,var_top_g,var_right_g,var_bottom_g
end