#pragma rtGlobals=1		// Use modern global access method.
#include <Waves Average>

macro Ratio_y_Matrix()

pRatio_y_Matrix()
proc pRatio_y_Matrix(str_input)
string str_input
prompt str_input "input waves ?"
string str_list_input = sortlist (wavelist(str_input,";",""),";",16)
string str_list_input_print = sortlist (wavelist(str_input,"\r",""),"\r",16)
print str_list_input_print
variable/g var_index = 0
do
silent 1
	string/g str_waves = stringfromlist(var_index,str_list_input)
	duplicate/o $str_waves tempwave
	variable/g var_scroll_x = 0
	do
		variable/g var_scroll_y = 0
		variable/g var_0 = tempwave[var_scroll_x][0]
		do
			tempwave[var_scroll_x][var_scroll_y] = tempwave[var_scroll_x][var_scroll_y] / var_0
		var_scroll_y+=1
		while(var_scroll_y < dimsize($str_waves,1))
	var_scroll_x+=1
	while (var_scroll_x < dimsize($str_waves,0))
	rename tempwave,  $(str_waves)+"_r"
var_index+=1
while (var_index < itemsinlist(str_list_input))
beep
end