#pragma rtGlobals=1

macro Remove_Suffix_in_Folders()

pRemove_Suffix_in_Folders()
proc pRemove_Suffix_in_Folders(str_input,str_start)
string str_input
prompt str_input "input folders ?"
string str_start
prompt str_start "string cut byte ?"
string str_list
variable var_index
silent 1
pauseupdate
str_list = ""
var_index = 0
do
	str_list = addlistitem(getindexedobjname("",4,var_index),str_list,";",var_index)
	var_index+=1
while(var_index<countobjects("",4))
str_list = removefromlist("Packages",str_list)
str_list = listmatch(str_list,str_input)
str_list = sortlist(str_list,";",16)
print replacestring(";",str_list,"\r")
var_index = 0
do
	renamedatafolder root:$stringfromlist(var_index,str_list), $(stringfromlist(var_index,str_list)[0,str2num(str_start)])
	var_index+=1
while(var_index<itemsinlist(str_list))
end