#pragma rtGlobals=1

Macro Remove_Zeros()

pRemove_Zeros()

proc pRemove_Zeros(str_input,str_output)
string str_input
prompt str_input "input waves ?"
string str_output
prompt str_output "output waves ?"
string str_list = sortlist(wavelist(str_input,";",""),";",16)
print replacestring(";",str_list,"\r")
variable var_index
var_index = 0
do
	duplicate/o $stringfromlist(var_index,str_list) $(stringfromlist(var_index,str_list)+"_"+str_output)
	$(stringfromlist(var_index,str_list)+"_"+str_output) = ($(stringfromlist(var_index,str_list)+"_"+str_output)[p] == 0) ? NaN : $(stringfromlist(var_index,str_list)+"_"+str_output)[p]
	wavetransform/o zapnans $(stringfromlist(var_index,str_list)+"_"+str_output)
	var_index+=1
while(var_index<itemsinlist(str_list))