#pragma rtGlobals=1

macro check_normality()

pcheck_normality()
proc pcheck_normality(str_input,str_output)
string str_input
prompt str_input "input waves ?"
string str_output
prompt str_output "output wave ?"
string str_list = sortlist(wavelist(str_input,";",""),";",16)
print replacestring(";",str_list,"\r")
make/o/n=(itemsinlist(str_list),5) $str_output = nan
setdimlabel 1,0,shapirowilk_p,$str_output
setdimlabel 1,1,shapirowilk_norm,$str_output
setdimlabel 1,2,jarquebera_s,$str_output
setdimlabel 1,3,jarquebera_c,$str_output
setdimlabel 1,4,jarquebera_norm,$str_output
variable var_index
var_index = 0
do
	killvariables/z v_prob
	statsshapirowilktest/q/z $stringfromlist(var_index,str_list)
	$str_output[var_index][0] = v_prob
	if($str_output[var_index][0] < 0.05)
		$str_output[var_index][1] = 0
	else
		$str_output[var_index][1] = 1
	endif
	killwaves/z W_JBResults
	statsjbtest/q/z $stringfromlist(var_index,str_list)
	$str_output[var_index][2] = w_jbresults[%JBStatistic]
	$str_output[var_index][3] = w_jbresults[%Critical]
	if($str_output[var_index][2] >= $str_output[var_index][3])
		$str_output[var_index][4] = 0
	else
		$str_output[var_index][4] = 1
	endif
	setdimlabel 0,var_index,$stringfromlist(var_index,str_list),$str_output
	var_index+=1
while(var_index<itemsinlist(str_list))
end