#pragma rtGlobals=1		// Use modern global access method.
#include <Waves Average>

macro parse_3D_matrix()

pparse_3D_matrix()
proc pparse_3D_matrix(str_input)
string str_input
prompt str_input "input waves ?"
string str_list = sortlist(wavelist(str_input,";",""),";",16)
print replacestring(";",str_list,"\r")
pauseupdate
silent 1
variable var_index = 0
variable var_tile = 0
variable var_x
variable var_y
variable var_z
variable var_i
variable var_scroll
variable var_stop
variable var_label
do
	make/o/n=(dimsize($stringfromlist(var_index,str_list),0),dimsize($stringfromlist(var_index,str_list),2)) $(stringfromlist(var_index,str_list)+"_xz_d") = nan
	make/o/n=(dimsize($stringfromlist(var_index,str_list),1),dimsize($stringfromlist(var_index,str_list),2)) $(stringfromlist(var_index,str_list)+"_yz_d") = nan
	make/o/n=(dimsize($stringfromlist(var_index,str_list),0),dimsize($stringfromlist(var_index,str_list),2)) $(stringfromlist(var_index,str_list)+"_xz_c") = nan
	make/o/n=(dimsize($stringfromlist(var_index,str_list),1),dimsize($stringfromlist(var_index,str_list),2)) $(stringfromlist(var_index,str_list)+"_yz_c") = nan
	make/o/n=(dimsize($stringfromlist(var_index,str_list),2)) $(stringfromlist(var_index,str_list)+"_xz_i") = nan
	make/o/n=(dimsize($stringfromlist(var_index,str_list),2)) $(stringfromlist(var_index,str_list)+"_yz_i") = nan	
	make/o/n=(dimsize($stringfromlist(var_index,str_list),2)) $(stringfromlist(var_index,str_list)+"_xz_d_1p5i") = nan
	make/o/n=(dimsize($stringfromlist(var_index,str_list),2)) $(stringfromlist(var_index,str_list)+"_yz_d_1p5i") = nan	
	make/o/n=(dimsize($stringfromlist(var_index,str_list),2)) $(stringfromlist(var_index,str_list)+"_xz_c_1p5i") = nan
	make/o/n=(dimsize($stringfromlist(var_index,str_list),2)) $(stringfromlist(var_index,str_list)+"_yz_c_1p5i") = nan
	make/o/n=(dimsize($stringfromlist(var_index,str_list),0)) $(stringfromlist(var_index,str_list)+"_xz_d_avg") = nan
	make/o/n=(dimsize($stringfromlist(var_index,str_list),1)) $(stringfromlist(var_index,str_list)+"_yz_d_avg") = nan
	make/o/n=(dimsize($stringfromlist(var_index,str_list),0)) $(stringfromlist(var_index,str_list)+"_xz_d_sem") = nan
	make/o/n=(dimsize($stringfromlist(var_index,str_list),1)) $(stringfromlist(var_index,str_list)+"_yz_d_sem") = nan
	make/o/n=(dimsize($stringfromlist(var_index,str_list),0)) $(stringfromlist(var_index,str_list)+"_xz_c_avg") = nan
	make/o/n=(dimsize($stringfromlist(var_index,str_list),1)) $(stringfromlist(var_index,str_list)+"_yz_c_avg") = nan
	make/o/n=(dimsize($stringfromlist(var_index,str_list),0)) $(stringfromlist(var_index,str_list)+"_xz_c_sem") = nan
	make/o/n=(dimsize($stringfromlist(var_index,str_list),1)) $(stringfromlist(var_index,str_list)+"_yz_c_sem") = nan
	make/o/n=(1) $(stringfromlist(var_index,str_list)+"_xz_i_avg") = nan
	make/o/n=(1) $(stringfromlist(var_index,str_list)+"_yz_i_avg") = nan
	make/o/n=(1) $(stringfromlist(var_index,str_list)+"_xz_i_sem") = nan
	make/o/n=(1) $(stringfromlist(var_index,str_list)+"_yz_i_sem") = nan
	make/o/n=(1) $(stringfromlist(var_index,str_list)+"_xz_d_1p5i_avg") = nan
	make/o/n=(1) $(stringfromlist(var_index,str_list)+"_yz_d_1p5i_avg") = nan
	make/o/n=(1) $(stringfromlist(var_index,str_list)+"_xz_d_1p5i_sem") = nan
	make/o/n=(1) $(stringfromlist(var_index,str_list)+"_yz_d_1p5i_sem") = nan
	make/o/n=(1) $(stringfromlist(var_index,str_list)+"_xz_c_1p5i_avg") = nan
	make/o/n=(1) $(stringfromlist(var_index,str_list)+"_yz_c_1p5i_avg") = nan
	make/o/n=(1) $(stringfromlist(var_index,str_list)+"_xz_c_1p5i_sem") = nan
	make/o/n=(1) $(stringfromlist(var_index,str_list)+"_yz_c_1p5i_sem") = nan
	setscale/p x dimoffset($stringfromlist(var_index,str_list),0),dimdelta($stringfromlist(var_index,str_list),0),"",$(stringfromlist(var_index,str_list)+"_xz_d")
	setscale/p y dimoffset($stringfromlist(var_index,str_list),2),dimdelta($stringfromlist(var_index,str_list),2),"",$(stringfromlist(var_index,str_list)+"_xz_d")
	setscale/p x dimoffset($stringfromlist(var_index,str_list),1),dimdelta($stringfromlist(var_index,str_list),1),"",$(stringfromlist(var_index,str_list)+"_yz_d")
	setscale/p y dimoffset($stringfromlist(var_index,str_list),2),dimdelta($stringfromlist(var_index,str_list),2),"",$(stringfromlist(var_index,str_list)+"_yz_d")
	setscale/p x dimoffset($stringfromlist(var_index,str_list),0),dimdelta($stringfromlist(var_index,str_list),0),"",$(stringfromlist(var_index,str_list)+"_xz_d_avg")
	setscale/p x dimoffset($stringfromlist(var_index,str_list),1),dimdelta($stringfromlist(var_index,str_list),1),"",$(stringfromlist(var_index,str_list)+"_yz_d_avg")
	setscale/p x dimoffset($stringfromlist(var_index,str_list),0),dimdelta($stringfromlist(var_index,str_list),0),"",$(stringfromlist(var_index,str_list)+"_xz_d_sem")
	setscale/p x dimoffset($stringfromlist(var_index,str_list),1),dimdelta($stringfromlist(var_index,str_list),1),"",$(stringfromlist(var_index,str_list)+"_yz_d_sem")
	setscale/p x dimoffset($stringfromlist(var_index,str_list),0),dimdelta($stringfromlist(var_index,str_list),0),"",$(stringfromlist(var_index,str_list)+"_xz_c_avg")
	setscale/p x dimoffset($stringfromlist(var_index,str_list),1),dimdelta($stringfromlist(var_index,str_list),1),"",$(stringfromlist(var_index,str_list)+"_yz_c_avg")
	setscale/p x dimoffset($stringfromlist(var_index,str_list),0),dimdelta($stringfromlist(var_index,str_list),0),"",$(stringfromlist(var_index,str_list)+"_xz_c_sem")
	setscale/p x dimoffset($stringfromlist(var_index,str_list),1),dimdelta($stringfromlist(var_index,str_list),1),"",$(stringfromlist(var_index,str_list)+"_yz_c_sem")
	copydimlabels/rows=0/layr=1 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_xz_d")
	copydimlabels/cols=0/layr=1 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_yz_d")
	copydimlabels/rows=0/layr=1 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_xz_c")
	copydimlabels/cols=0/layr=1 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_yz_c")
	copydimlabels/rows=0 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_xz_d_avg")
	copydimlabels/cols=0 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_yz_d_avg")
	copydimlabels/rows=0 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_xz_d_sem")
	copydimlabels/cols=0 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_yz_d_sem")
	copydimlabels/rows=0 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_xz_c_avg")
	copydimlabels/cols=0 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_yz_c_avg")
	copydimlabels/rows=0 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_xz_c_sem")
	copydimlabels/cols=0 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_yz_c_sem")
	copydimlabels/layr=0 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_xz_i")
	copydimlabels/layr=0 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_yz_i")
	copydimlabels/layr=0 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_xz_d_1p5i")
	copydimlabels/layr=0 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_yz_d_1p5i")
	copydimlabels/layr=0 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_xz_c_1p5i")
	copydimlabels/layr=0 $stringfromlist(var_index,str_list),$(stringfromlist(var_index,str_list)+"_yz_c_1p5i")
	var_label = 0
	do
		setdimlabel 0,var_label,$getdimlabel($stringfromlist(var_index,str_list),2,var_label),$(stringfromlist(var_index,str_list)+"_xz_i")
		setdimlabel 0,var_label,$getdimlabel($stringfromlist(var_index,str_list),2,var_label),$(stringfromlist(var_index,str_list)+"_yz_i")
		setdimlabel 0,var_label,$getdimlabel($stringfromlist(var_index,str_list),2,var_label),$(stringfromlist(var_index,str_list)+"_xz_d_1p5i")
		setdimlabel 0,var_label,$getdimlabel($stringfromlist(var_index,str_list),2,var_label),$(stringfromlist(var_index,str_list)+"_yz_d_1p5i")
		setdimlabel 0,var_label,$getdimlabel($stringfromlist(var_index,str_list),2,var_label),$(stringfromlist(var_index,str_list)+"_xz_c_1p5i")
		setdimlabel 0,var_label,$getdimlabel($stringfromlist(var_index,str_list),2,var_label),$(stringfromlist(var_index,str_list)+"_yz_c_1p5i")
		var_label+=1
	while(var_label<dimsize($stringfromlist(var_index,str_list),2))
	display/n=$("g_xz_d_"+stringfromlist(var_index,str_list))
	movewindow var_tile,45,350+var_tile,350
	display/n=$("g_yz_d_"+stringfromlist(var_index,str_list))
	movewindow 5.25*1+var_tile,45+22.5*1,350+5.25*1+var_tile,350+22.5*1
	display/n=$("g_xz_c_"+stringfromlist(var_index,str_list))
	movewindow 5.25*2+var_tile,45+22.5*2,350+5.25*2+var_tile,350+22.5*2
	display/n=$("g_yz_c_"+stringfromlist(var_index,str_list))
	movewindow 5.25*3+var_tile,45+22.5*3,350+5.25*3+var_tile,350+22.5*3
	display/n=$("g_xz_i_"+stringfromlist(var_index,str_list))
	movewindow 5.25*4+var_tile,45+22.5*4,350+5.25*4+var_tile,350+22.5*4
	display/n=$("g_yz_i_"+stringfromlist(var_index,str_list))
	movewindow 5.25*5+var_tile,45+22.5*5,350+5.25*5+var_tile,350+22.5*5
	display/n=$("g_xz_d_1p5i"+stringfromlist(var_index,str_list))
	movewindow 5.25*6+var_tile,45+22.5*6,350+5.25*6+var_tile,350+22.5*6
	display/n=$("g_yz_d_1p5i"+stringfromlist(var_index,str_list))
	movewindow 5.25*7+var_tile,45+22.5*7,350+5.25*7+var_tile,350+22.5*7
	display/n=$("g_xz_c_1p5i"+stringfromlist(var_index,str_list))
	movewindow 5.25*8+var_tile,45+22.5*8,350+5.25*8+var_tile,350+22.5*8
	display/n=$("g_yz_c_1p5i"+stringfromlist(var_index,str_list))
	movewindow 5.25*9+var_tile,45+22.5*9,350+5.25*9+var_tile,350+22.5*9
	var_z = 0
	do
		make/o/n=(dimsize($stringfromlist(var_index,str_list),0),dimsize($stringfromlist(var_index,str_list),1)) $(stringfromlist(var_index,str_list)+"_"+getdimlabel($stringfromlist(var_index,str_list),2,var_z)) = nan
		$(stringfromlist(var_index,str_list)+"_"+getdimlabel($stringfromlist(var_index,str_list),2,var_z))[][] = $stringfromlist(var_index,str_list)[p][q][var_z]
		var_stop = 0
		var_x = 0
		do
			make/o/n=(1,dimsize($stringfromlist(var_index,str_list),1)) temp = nan
			temp[1][] = $stringfromlist(var_index,str_list)[var_x][q][var_z]
			matrixtranspose temp
			wavestats/q temp
			$(stringfromlist(var_index,str_list)+"_xz_d")[var_x][var_z] = v_avg
			if(numpnts(temp) != v_numnans)
				$(stringfromlist(var_index,str_list)+"_xz_c")[var_x][var_z] = v_npnts
			endif
			if(var_stop == 0)
				var_i = 0
				var_scroll = 0
				do
					if(numtype(temp[var_scroll]) == 2)
						var_i+=1
					else
						var_stop = 1
						break
					endif
					var_scroll+=1
				while(var_scroll<=v_endrow)
				$(stringfromlist(var_index,str_list)+"_yz_i")[var_z] = var_i*dimdelta($stringfromlist(var_index,str_list),1)+dimoffset($stringfromlist(var_index,str_list),1)
			endif
			var_x+=1
		while(var_x<dimsize($stringfromlist(var_index,str_list),0))
		var_stop = 0
		var_y = 0
		do
			make/o/n=(dimsize($stringfromlist(var_index,str_list),0)) temp = nan
			temp = $stringfromlist(var_index,str_list)[p][var_y][var_z]
			wavestats/q temp
			$(stringfromlist(var_index,str_list)+"_yz_d")[var_y][var_z] = v_avg
			if(numpnts(temp) != v_numnans)
				$(stringfromlist(var_index,str_list)+"_yz_c")[var_y][var_z] = v_npnts
			endif
			if(var_stop == 0)
				var_i = 0
				var_scroll = 0
				do
					if(numtype(temp[var_scroll]) == 2)
						var_i+=1
					else
						var_stop = 1
						break
					endif
					var_scroll+=1
				while(var_scroll<=v_endrow)
				$(stringfromlist(var_index,str_list)+"_xz_i")[var_z] = var_i*dimdelta($stringfromlist(var_index,str_list),0)+dimoffset($stringfromlist(var_index,str_list),0)
			endif
			var_y+=1
		while(var_y<dimsize($stringfromlist(var_index,str_list),1))
		var_x = 0
		do
			make/o/n=(1,dimsize($stringfromlist(var_index,str_list),2)) temp = nan
			temp[1][] = $(stringfromlist(var_index,str_list)+"_xz_d")[var_x][q]
			matrixtranspose temp
			wavestats/q temp
			$(stringfromlist(var_index,str_list)+"_xz_d_avg")[var_x] = v_avg
			$(stringfromlist(var_index,str_list)+"_xz_d_sem")[var_x] = v_sem
			make/o/n=(1,dimsize($stringfromlist(var_index,str_list),2)) temp = nan
			temp[1][] = $(stringfromlist(var_index,str_list)+"_xz_c")[var_x][q]
			matrixtranspose temp
			wavestats/q temp
			$(stringfromlist(var_index,str_list)+"_xz_c_avg")[var_x] = v_avg
			$(stringfromlist(var_index,str_list)+"_xz_c_sem")[var_x] = v_sem
			var_x+=1
		while(var_x<dimsize($stringfromlist(var_index,str_list),0))
		var_y = 0
		do
			make/o/n=(1,dimsize($stringfromlist(var_index,str_list),2)) temp = nan
			temp[1][] = $(stringfromlist(var_index,str_list)+"_yz_d")[var_y][q]
			matrixtranspose temp
			wavestats/q temp
			$(stringfromlist(var_index,str_list)+"_yz_d_avg")[var_y] = v_avg
			$(stringfromlist(var_index,str_list)+"_yz_d_sem")[var_y] = v_sem
			make/o/n=(1,dimsize($stringfromlist(var_index,str_list),2)) temp = nan
			temp[1][] = $(stringfromlist(var_index,str_list)+"_yz_c")[var_y][q]
			matrixtranspose temp
			wavestats/q temp
			$(stringfromlist(var_index,str_list)+"_yz_c_avg")[var_y] = v_avg
			$(stringfromlist(var_index,str_list)+"_yz_c_sem")[var_y] = v_sem
			var_y+=1
		while(var_y<dimsize($stringfromlist(var_index,str_list),1))
		$(stringfromlist(var_index,str_list)+"_xz_d_1p5i")[var_z] = $(stringfromlist(var_index,str_list)+"_yz_d_avg")[$(stringfromlist(var_index,str_list)+"_yz_i")[var_z]]
		$(stringfromlist(var_index,str_list)+"_yz_d_1p5i")[var_z] = $(stringfromlist(var_index,str_list)+"_xz_d_avg")[$(stringfromlist(var_index,str_list)+"_xz_i")[var_z]]
		$(stringfromlist(var_index,str_list)+"_xz_c_1p5i")[var_z] = $(stringfromlist(var_index,str_list)+"_yz_c_avg")[$(stringfromlist(var_index,str_list)+"_yz_i")[var_z]]
		$(stringfromlist(var_index,str_list)+"_yz_c_1p5i")[var_z] = $(stringfromlist(var_index,str_list)+"_xz_c_avg")[$(stringfromlist(var_index,str_list)+"_xz_i")[var_z]]
		appendtograph/w=$("g_xz_d_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_xz_d")[][var_z]
		appendtograph/w=$("g_yz_d_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_yz_d")[][var_z]
		appendtograph/w=$("g_xz_c_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_xz_c")[][var_z]
		appendtograph/w=$("g_yz_c_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_yz_c")[][var_z]
		var_z+=1
	while(var_z<dimsize($stringfromlist(var_index,str_list),2))
	wavestats/q $(stringfromlist(var_index,str_list)+"_xz_i")
	$(stringfromlist(var_index,str_list)+"_xz_i_avg") = v_avg
	$(stringfromlist(var_index,str_list)+"_xz_i_sem") = v_sem
	wavestats/q $(stringfromlist(var_index,str_list)+"_yz_i")
	$(stringfromlist(var_index,str_list)+"_yz_i_avg") = v_avg
	$(stringfromlist(var_index,str_list)+"_yz_i_sem") = v_sem
	modifygraph/w=$("g_xz_d_"+stringfromlist(var_index,str_list)) mode=4,rgb=(0,0,0),marker=19,msize=1
	modifygraph/w=$("g_yz_d_"+stringfromlist(var_index,str_list)) mode=4,rgb=(0,0,0),marker=19,msize=1
	modifygraph/w=$("g_xz_c_"+stringfromlist(var_index,str_list)) mode=4,rgb=(0,0,0),marker=19,msize=1
	modifygraph/w=$("g_yz_c_"+stringfromlist(var_index,str_list)) mode=4,rgb=(0,0,0),marker=19,msize=1
	appendtograph/w=$("g_xz_d_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_xz_d_avg")
	//modifygraph/w=$("g_xz_d_"+stringfromlist(var_index,str_list)) mode($(stringfromlist(var_index,str_list)+"_xz_d_avg"))=0,rgb($(stringfromlist(var_index,str_list)+"_xz_d_avg"))=(65535,0,0),lsize($(stringfromlist(var_index,str_list)+"_xz_d_avg"))=1.5
	//errorbars/w=$("g_xz_d_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_xz_d_avg") shade={0,0,(65535,0,0,32768),(0,0,0,0)},wave=($(stringfromlist(var_index,str_list)+"_xz_d_sem"),$(stringfromlist(var_index,str_list)+"_xz_d_sem"))
	modifygraph/w=$("g_xz_d_"+stringfromlist(var_index,str_list)) mode($(stringfromlist(var_index,str_list)+"_xz_d_avg"))=3,marker($(stringfromlist(var_index,str_list)+"_xz_d_avg"))=19,rgb($(stringfromlist(var_index,str_list)+"_xz_d_avg"))=(65535,0,0)
	errorbars/w=$("g_xz_d_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_xz_d_avg") y,wave=($(stringfromlist(var_index,str_list)+"_xz_d_sem"),$(stringfromlist(var_index,str_list)+"_xz_d_sem"))
	label/w=$("g_xz_d_"+stringfromlist(var_index,str_list)) bottom "x"
	label/w=$("g_xz_d_"+stringfromlist(var_index,str_list)) left "d"
	textbox/w=$("g_xz_d_"+stringfromlist(var_index,str_list))/c/n=t_xz_d/f=0/a=mt/b=1/x=0/y=-5 "\\f01"+stringfromlist(var_index,str_list)
	appendtograph/w=$("g_yz_d_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_yz_d_avg")
	//modifygraph/w=$("g_yz_d_"+stringfromlist(var_index,str_list)) mode($(stringfromlist(var_index,str_list)+"_yz_d_avg"))=0,rgb($(stringfromlist(var_index,str_list)+"_yz_d_avg"))=(65535,0,0),lsize($(stringfromlist(var_index,str_list)+"_yz_d_avg"))=1.5
	//errorbars/w=$("g_yz_d_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_yz_d_avg") shade={0,0,(65535,0,0,32768),(0,0,0,0)},wave=($(stringfromlist(var_index,str_list)+"_yz_d_sem"),$(stringfromlist(var_index,str_list)+"_yz_d_sem"))
	modifygraph/w=$("g_yz_d_"+stringfromlist(var_index,str_list)) mode($(stringfromlist(var_index,str_list)+"_yz_d_avg"))=3,marker($(stringfromlist(var_index,str_list)+"_yz_d_avg"))=19,rgb($(stringfromlist(var_index,str_list)+"_yz_d_avg"))=(65535,0,0),lsize($(stringfromlist(var_index,str_list)+"_yz_d_avg"))=1.5
	errorbars/w=$("g_yz_d_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_yz_d_avg") y,wave=($(stringfromlist(var_index,str_list)+"_yz_d_sem"),$(stringfromlist(var_index,str_list)+"_yz_d_sem"))
	label/w=$("g_yz_d_"+stringfromlist(var_index,str_list)) bottom "y"
	label/w=$("g_yz_d_"+stringfromlist(var_index,str_list)) left "d"
	textbox/w=$("g_yz_d_"+stringfromlist(var_index,str_list))/c/n=t_yz_d/f=0/a=mt/b=1/x=0/y=-5 "\\f01"+stringfromlist(var_index,str_list)
	appendtograph/w=$("g_xz_c_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_xz_c_avg")
	//modifygraph/w=$("g_xz_c_"+stringfromlist(var_index,str_list)) mode($(stringfromlist(var_index,str_list)+"_xz_c_avg"))=0,rgb($(stringfromlist(var_index,str_list)+"_xz_c_avg"))=(65535,0,0),lsize($(stringfromlist(var_index,str_list)+"_xz_c_avg"))=1.5
	//errorbars/w=$("g_xz_c_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_xz_c_avg") shade={0,0,(65535,0,0,32768),(0,0,0,0)},wave=($(stringfromlist(var_index,str_list)+"_xz_c_sem"),$(stringfromlist(var_index,str_list)+"_xz_c_sem"))
	modifygraph/w=$("g_xz_c_"+stringfromlist(var_index,str_list)) mode($(stringfromlist(var_index,str_list)+"_xz_c_avg"))=3,marker($(stringfromlist(var_index,str_list)+"_xz_c_avg"))=19,rgb($(stringfromlist(var_index,str_list)+"_xz_c_avg"))=(65535,0,0),lsize($(stringfromlist(var_index,str_list)+"_xz_c_avg"))=1.5
	errorbars/w=$("g_xz_c_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_xz_c_avg") y,wave=($(stringfromlist(var_index,str_list)+"_xz_c_sem"),$(stringfromlist(var_index,str_list)+"_xz_c_sem"))
	label/w=$("g_xz_c_"+stringfromlist(var_index,str_list)) bottom "x"
	label/w=$("g_xz_c_"+stringfromlist(var_index,str_list)) left "c"
	textbox/w=$("g_xz_c_"+stringfromlist(var_index,str_list))/c/n=t_xz_c/f=0/a=mt/b=1/x=0/y=-5 "\\f01"+stringfromlist(var_index,str_list)
	appendtograph/w=$("g_yz_c_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_yz_c_avg")
	//modifygraph/w=$("g_yz_c_"+stringfromlist(var_index,str_list)) mode($(stringfromlist(var_index,str_list)+"_yz_c_avg"))=0,rgb($(stringfromlist(var_index,str_list)+"_yz_c_avg"))=(65535,0,0),lsize($(stringfromlist(var_index,str_list)+"_yz_c_avg"))=1.5
	//errorbars/w=$("g_yz_c_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_yz_c_avg") shade={0,0,(65535,0,0,32768),(0,0,0,0)},wave=($(stringfromlist(var_index,str_list)+"_yz_c_sem"),$(stringfromlist(var_index,str_list)+"_yz_c_sem"))
	modifygraph/w=$("g_yz_c_"+stringfromlist(var_index,str_list)) mode($(stringfromlist(var_index,str_list)+"_yz_c_avg"))=3,marker($(stringfromlist(var_index,str_list)+"_yz_c_avg"))=19,rgb($(stringfromlist(var_index,str_list)+"_yz_c_avg"))=(65535,0,0),lsize($(stringfromlist(var_index,str_list)+"_yz_c_avg"))=1.5
	errorbars/w=$("g_yz_c_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_yz_c_avg") y,wave=($(stringfromlist(var_index,str_list)+"_yz_c_sem"),$(stringfromlist(var_index,str_list)+"_yz_c_sem"))
	label/w=$("g_yz_c_"+stringfromlist(var_index,str_list)) bottom "y"
	label/w=$("g_yz_c_"+stringfromlist(var_index,str_list)) left "c"
	textbox/w=$("g_yz_c_"+stringfromlist(var_index,str_list))/c/n=t_yz_c/f=0/a=mt/b=1/x=0/y=-5 "\\f01"+stringfromlist(var_index,str_list)
	appendboxplot/w=$("g_xz_i_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_xz_i")
	modifyboxplot/w=$("g_xz_i_"+stringfromlist(var_index,str_list)) trace=$(stringfromlist(var_index,str_list)+"_xz_i"),markers={19,19,19},jitter=1,notched,markerSizes={2,2,2},boxwidth=20
	modifygraph/w=$("g_xz_i_"+stringfromlist(var_index,str_list)) rgb($(stringfromlist(var_index,str_list)+"_xz_i")) = (0,0,0,32768)
	appendtograph/w=$("g_xz_i_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_xz_i_avg")
	modifygraph/w=$("g_xz_i_"+stringfromlist(var_index,str_list)) mode($(stringfromlist(var_index,str_list)+"_xz_i_avg"))=3,marker($(stringfromlist(var_index,str_list)+"_xz_i_avg"))=9,msize($(stringfromlist(var_index,str_list)+"_xz_i_avg"))=10,mrkThick($(stringfromlist(var_index,str_list)+"_xz_i_avg"))=3,rgb($(stringfromlist(var_index,str_list)+"_xz_i_avg"))=(65535,0,0)
	errorbars/w=$("g_xz_i_"+stringfromlist(var_index,str_list))/t=1.5/l=1.5 $(stringfromlist(var_index,str_list)+"_xz_i_avg") y,wave=($(stringfromlist(var_index,str_list)+"_xz_i_sem"),$(stringfromlist(var_index,str_list)+"_xz_i_sem"))
	label/w=$("g_xz_i_"+stringfromlist(var_index,str_list)) bottom "x"
	label/w=$("g_xz_i_"+stringfromlist(var_index,str_list)) left "i"
	textbox/w=$("g_xz_i_"+stringfromlist(var_index,str_list))/c/n=t_xz_i/f=0/a=mt/b=1/x=0/y=-5 "\\f01"+stringfromlist(var_index,str_list)
	appendboxplot/w=$("g_yz_i_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_yz_i")
	modifyboxplot/w=$("g_yz_i_"+stringfromlist(var_index,str_list)) trace=$(stringfromlist(var_index,str_list)+"_yz_i"),markers={19,19,19},jitter=1,notched,markerSizes={2,2,2},boxwidth=20
	modifygraph/w=$("g_yz_i_"+stringfromlist(var_index,str_list)) rgb($(stringfromlist(var_index,str_list)+"_yz_i")) = (0,0,0,32768)
	appendtograph/w=$("g_yz_i_"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_yz_i_avg")
	modifygraph/w=$("g_yz_i_"+stringfromlist(var_index,str_list)) mode($(stringfromlist(var_index,str_list)+"_yz_i_avg"))=3,marker($(stringfromlist(var_index,str_list)+"_yz_i_avg"))=9,msize($(stringfromlist(var_index,str_list)+"_yz_i_avg"))=10,mrkThick($(stringfromlist(var_index,str_list)+"_yz_i_avg"))=3,rgb($(stringfromlist(var_index,str_list)+"_yz_i_avg"))=(65535,0,0)
	errorbars/w=$("g_yz_i_"+stringfromlist(var_index,str_list))/t=1.5/l=1.5 $(stringfromlist(var_index,str_list)+"_yz_i_avg") y,wave=($(stringfromlist(var_index,str_list)+"_yz_i_sem"),$(stringfromlist(var_index,str_list)+"_yz_i_sem"))
	label/w=$("g_yz_i_"+stringfromlist(var_index,str_list)) bottom "y"
	label/w=$("g_yz_i_"+stringfromlist(var_index,str_list)) left "i"
	textbox/w=$("g_yz_i_"+stringfromlist(var_index,str_list))/c/n=t_yz_i/f=0/a=mt/b=1/x=0/y=-5 "\\f01"+stringfromlist(var_index,str_list)
	appendboxplot/w=$("g_xz_d_1p5i"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_xz_d_1p5i")
	modifyboxplot/w=$("g_xz_d_1p5i"+stringfromlist(var_index,str_list)) trace=$(stringfromlist(var_index,str_list)+"_xz_d_1p5i"),markers={19,19,19},jitter=1,notched,markerSizes={2,2,2},boxwidth=20
	modifygraph/w=$("g_xz_d_1p5i"+stringfromlist(var_index,str_list)) rgb($(stringfromlist(var_index,str_list)+"_xz_d_1p5i")) = (0,0,0,32768)
	appendtograph/w=$("g_xz_d_1p5i"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_xz_d_1p5i_avg")
	modifygraph/w=$("g_xz_d_1p5i"+stringfromlist(var_index,str_list)) mode($(stringfromlist(var_index,str_list)+"_xz_d_1p5i_avg"))=3,marker($(stringfromlist(var_index,str_list)+"_xz_d_1p5i_avg"))=9,msize($(stringfromlist(var_index,str_list)+"_xz_d_1p5i_avg"))=10,mrkThick($(stringfromlist(var_index,str_list)+"_xz_d_1p5i_avg"))=3,rgb($(stringfromlist(var_index,str_list)+"_xz_d_1p5i_avg"))=(65535,0,0)
	errorbars/w=$("g_xz_d_1p5i"+stringfromlist(var_index,str_list))/t=1.5/l=1.5 $(stringfromlist(var_index,str_list)+"_xz_d_1p5i_avg") y,wave=($(stringfromlist(var_index,str_list)+"_xz_d_1p5i_sem"),$(stringfromlist(var_index,str_list)+"_xz_d_1p5i_sem"))
	label/w=$("g_xz_d_1p5i"+stringfromlist(var_index,str_list)) bottom "x"
	label/w=$("g_xz_d_1p5i"+stringfromlist(var_index,str_list)) left "d1p5i"
	textbox/w=$("g_xz_d_1p5i"+stringfromlist(var_index,str_list))/c/n=t_yz_i/f=0/a=mt/b=1/x=0/y=-5 "\\f01"+stringfromlist(var_index,str_list)
	appendboxplot/w=$("g_yz_d_1p5i"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_yz_d_1p5i")
	modifyboxplot/w=$("g_yz_d_1p5i"+stringfromlist(var_index,str_list)) trace=$(stringfromlist(var_index,str_list)+"_yz_d_1p5i"),markers={19,19,19},jitter=1,notched,markerSizes={2,2,2},boxwidth=20
	modifygraph/w=$("g_yz_d_1p5i"+stringfromlist(var_index,str_list)) rgb($(stringfromlist(var_index,str_list)+"_yz_d_1p5i")) = (0,0,0,32768)
	appendtograph/w=$("g_yz_d_1p5i"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_yz_d_1p5i_avg")
	modifygraph/w=$("g_yz_d_1p5i"+stringfromlist(var_index,str_list)) mode($(stringfromlist(var_index,str_list)+"_yz_d_1p5i_avg"))=3,marker($(stringfromlist(var_index,str_list)+"_yz_d_1p5i_avg"))=9,msize($(stringfromlist(var_index,str_list)+"_yz_d_1p5i_avg"))=10,mrkThick($(stringfromlist(var_index,str_list)+"_yz_d_1p5i_avg"))=3,rgb($(stringfromlist(var_index,str_list)+"_yz_d_1p5i_avg"))=(65535,0,0)
	errorbars/w=$("g_yz_d_1p5i"+stringfromlist(var_index,str_list))/t=1.5/l=1.5 $(stringfromlist(var_index,str_list)+"_yz_d_1p5i_avg") y,wave=($(stringfromlist(var_index,str_list)+"_yz_d_1p5i_sem"),$(stringfromlist(var_index,str_list)+"_yz_d_1p5i_sem"))
	label/w=$("g_yz_d_1p5i"+stringfromlist(var_index,str_list)) bottom "y"
	label/w=$("g_yz_d_1p5i"+stringfromlist(var_index,str_list)) left "d1p5i"
	textbox/w=$("g_yz_d_1p5i"+stringfromlist(var_index,str_list))/c/n=t_yz_i/f=0/a=mt/b=1/x=0/y=-5 "\\f01"+stringfromlist(var_index,str_list)
	appendboxplot/w=$("g_xz_c_1p5i"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_xz_c_1p5i")
	modifyboxplot/w=$("g_xz_c_1p5i"+stringfromlist(var_index,str_list)) trace=$(stringfromlist(var_index,str_list)+"_xz_c_1p5i"),markers={19,19,19},jitter=1,notched,markerSizes={2,2,2},boxwidth=20
	modifygraph/w=$("g_xz_c_1p5i"+stringfromlist(var_index,str_list)) rgb($(stringfromlist(var_index,str_list)+"_xz_c_1p5i")) = (0,0,0,32768)
	appendtograph/w=$("g_xz_c_1p5i"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_xz_c_1p5i_avg")
	modifygraph/w=$("g_xz_c_1p5i"+stringfromlist(var_index,str_list)) mode($(stringfromlist(var_index,str_list)+"_xz_c_1p5i_avg"))=3,marker($(stringfromlist(var_index,str_list)+"_xz_c_1p5i_avg"))=9,msize($(stringfromlist(var_index,str_list)+"_xz_c_1p5i_avg"))=10,mrkThick($(stringfromlist(var_index,str_list)+"_xz_c_1p5i_avg"))=3,rgb($(stringfromlist(var_index,str_list)+"_xz_c_1p5i_avg"))=(65535,0,0)
	errorbars/w=$("g_xz_c_1p5i"+stringfromlist(var_index,str_list))/t=1.5/l=1.5 $(stringfromlist(var_index,str_list)+"_xz_c_1p5i_avg") y,wave=($(stringfromlist(var_index,str_list)+"_xz_c_1p5i_sem"),$(stringfromlist(var_index,str_list)+"_xz_c_1p5i_sem"))
	label/w=$("g_xz_c_1p5i"+stringfromlist(var_index,str_list)) bottom "x"
	label/w=$("g_xz_c_1p5i"+stringfromlist(var_index,str_list)) left "c1p5i"
	textbox/w=$("g_xz_c_1p5i"+stringfromlist(var_index,str_list))/c/n=t_yz_i/f=0/a=mt/b=1/x=0/y=-5 "\\f01"+stringfromlist(var_index,str_list)
	appendboxplot/w=$("g_yz_c_1p5i"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_yz_c_1p5i")
	modifyboxplot/w=$("g_yz_c_1p5i"+stringfromlist(var_index,str_list)) trace=$(stringfromlist(var_index,str_list)+"_yz_c_1p5i"),markers={19,19,19},jitter=1,notched,markerSizes={2,2,2},boxwidth=20
	modifygraph/w=$("g_yz_c_1p5i"+stringfromlist(var_index,str_list)) rgb($(stringfromlist(var_index,str_list)+"_yz_c_1p5i")) = (0,0,0,32768)
	appendtograph/w=$("g_yz_c_1p5i"+stringfromlist(var_index,str_list)) $(stringfromlist(var_index,str_list)+"_yz_c_1p5i_avg")
	modifygraph/w=$("g_yz_c_1p5i"+stringfromlist(var_index,str_list)) mode($(stringfromlist(var_index,str_list)+"_yz_c_1p5i_avg"))=3,marker($(stringfromlist(var_index,str_list)+"_yz_c_1p5i_avg"))=9,msize($(stringfromlist(var_index,str_list)+"_yz_c_1p5i_avg"))=10,mrkThick($(stringfromlist(var_index,str_list)+"_yz_c_1p5i_avg"))=3,rgb($(stringfromlist(var_index,str_list)+"_yz_c_1p5i_avg"))=(65535,0,0)
	errorbars/w=$("g_yz_c_1p5i"+stringfromlist(var_index,str_list))/t=1.5/l=1.5 $(stringfromlist(var_index,str_list)+"_yz_c_1p5i_avg") y,wave=($(stringfromlist(var_index,str_list)+"_yz_c_1p5i_sem"),$(stringfromlist(var_index,str_list)+"_yz_c_1p5i_sem"))
	label/w=$("g_yz_c_1p5i"+stringfromlist(var_index,str_list)) bottom "y"
	label/w=$("g_yz_c_1p5i"+stringfromlist(var_index,str_list)) left "c1p5i"
	textbox/w=$("g_yz_c_1p5i"+stringfromlist(var_index,str_list))/c/n=t_yz_i/f=0/a=mt/b=1/x=0/y=-5 "\\f01"+stringfromlist(var_index,str_list)
	var_tile+=55
	var_index+=1
while(var_index<itemsinlist(str_list))
killwaves/z temp
resumeupdate
end